PsychoPy2experiment version="3.2.3"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {u'gender (m/f)': u'f', u'age': u'', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  color = black
  expName = lexical_ral
  logging level = warning
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Routines
  Routine trial
    TextComponent fixation_cross
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    TextComponent word_stimuli
      letterHeight = 0.2
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $words
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    KeyboardComponent response
      allowedKeys = "left","right"
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    TextComponent arrow_keys
      letterHeight = 0.1
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.3
      text = < word                   non-word >
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    TextComponent too_slow
      letterHeight = 0.1
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 1.0
      text = Too slow!
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Welcome!

        You will judge whether a string of letters is a word or a non-word. Press right for non-word and left for real word.
    TextComponent text_3
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 5
      text = Press space to continue.
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    KeyboardComponent ready
      allowedKeys = 'space'
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback
    CodeComponent setMsg
      Code Type = Py
      Begin Routine:
        if response.corr:
            msg ='\u2713'
            msgColor = "green"
        else:
            msg = "x"
            msgColor = "red"
    TextComponent feedbackText
      color [set every repeat] = $msgColor
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine rest
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent rest_now
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Have a break. Press space when ready
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    CodeComponent code
      Code Type = Py
      Each Frame:
        if trials_2.thisTrialN not in [277]:
            continueRoutine=False
Flow
  Routine instruct
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = experimental_trials1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Num', 1), ('words', 'nump'), ('Type', 'trial'), ('Concreteness', None), ('Emotion', None), ('corrAns', 'right'), ('size', 4)]),
      OrderedDict([('Num', 2), ('words', 'butter'), ('Type', 'trial'), ('Concreteness', None), ('Emotion', None), ('corrAns', 'left'), ('size', 6)]),
      OrderedDict([('Num', 3), ('words', 'mushroom'), ('Type', 'trial'), ('Concreteness', None), ('Emotion', None), ('corrAns', 'left'), ('size', 8)]),
      OrderedDict([('Num', 4), ('words', 'wumble'), ('Type', 'trial'), ('Concreteness', None), ('Emotion', None), ('corrAns', 'right'), ('size', 6)]),
      OrderedDict([('Num', 5), ('words', 'tade'), ('Type', 'trial'), ('Concreteness', None), ('Emotion', None), ('corrAns', 'left'), ('size', 4)]),
      OrderedDict([('Num', 6), ('words', 'plith'), ('Type', 'trial'), ('Concreteness', None), ('Emotion', None), ('corrAns', 'right'), ('size', 5)]),
      OrderedDict([('Num', 7), ('words', 'meadow'), ('Type', 'trial'), ('Concreteness', None), ('Emotion', None), ('corrAns', 'left'), ('size', 6)]),
      OrderedDict([('Num', 8), ('words', 'blendart'), ('Type', 'trial'), ('Concreteness', None), ('Emotion', None), ('corrAns', 'right'), ('size', 8)]),
      OrderedDict([('Num', 9), ('words', 'land'), ('Type', 'trial'), ('Concreteness', None), ('Emotion', None), ('corrAns', 'left'), ('size', 4)]),
      OrderedDict([('Num', 10), ('words', 'slintor'), ('Type', 'trial'), ('Concreteness', None), ('Emotion', None), ('corrAns', 'right'), ('size', 7)])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
    Routine rest
    Routine trial
    Routine feedback
  LoopTerminator trials_2
  Routine thanks
